CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file doesnot contain "Bright Field")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', '[NOTE] ', 'To include Metadata for entire image name use this line:', '^(?P<Well>[A-P][0-9]{1,2})_(?P<Objective>[01-2]{2})_(?P<ChannelNum>[1-3])_(?P<Site>[1-9])_(?P<Channel>.*)_(?P<TimePoint>[1-300]{3}).tif', '', 'Currently (July 2020) we only use some of these Metadata titles:', '^(?P<Well>[A-P][0-9]{1,2})_01_[1-3]_(?P<Site>[1-9])_(?P<Channel>.*)_']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-P][0-9]{1,2})_(?P<Objective>[01-2]{2})_(?P<ChannelNum>[1-3])_(?P<Site>.*)_(?P<Channel>.*)_(?P<TimePoint>[1-300]{3}).tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\/](?P<Date>.*)_(?P<Run>.*)_(?P<Plate>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:Hoechst_Orig
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:Sytox_Orig
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureImageQuality:[module_num:5|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:Hoechst_Orig
    Name the output image:Hoechst_CorrCalc
    Select how the illumination function is calculated:Background
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    Block size:50
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:Hoechst_Orig
    Name the output image:Hoechst_Rescale
    Select the illumination function:Hoechst_CorrCalc
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:Sytox_Orig
    Name the output image:Sytox_CorrCalc
    Select how the illumination function is calculated:Background
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    Block size:50
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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
    Select the input image:Sytox_Orig
    Name the output image:Sytox_Rescale
    Select the illumination function:Sytox_CorrCalc
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:10|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notes:['Create objects for each nucleus identified in the illumination-corrected DAPI image.', 'Outputs two images: one with color blocked objects for each nucleus and one with object outlines.']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
    Select the input image:Hoechst_Rescale
    Name the primary objects to be identified:Hoechst_Obj
    Typical diameter of objects, in pixel units (Min,Max):10,10000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.89
    Lower and upper bounds on threshold:0.10,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mode
    Variance method:Standard deviation
    # of deviations:2.0
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
MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:Hoechst_Obj
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:12|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
    Select images to measure:Hoechst_Rescale, Sytox_Rescale
    Select objects to measure:Hoechst_Obj

ExportToDatabase:[module_num:13|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Elsewhere...|C:\\Users\\cstefani\\Box\\Cellprofiler\\ETosis\\ctenophore-ETosis\\experiment 190703\\190703_151305_LIVE-cteno-ZVAD-staph-zymo-LPS-nigeric-pma-4h-7-3-19- analysis 210120
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:cteno190703DB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:96
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:v7
    Which objects should be used for locations?:DAPI_NucleiOg
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:14|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notes:['2. Exports the execution times for all modules after Groups module, as well as basic Metadata information (Condition, Well, and Site) for identification purposes.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|C:\\Users\\cstefani\\Box\\Cellprofiler\\ETosis\\ETosis-cellprofilerv9-all-experiements\\data
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Hoechst_Obj|AreaShape_InertiaTensor_1_1,Hoechst_Obj|AreaShape_InertiaTensor_1_0,Hoechst_Obj|AreaShape_InertiaTensor_0_0,Hoechst_Obj|AreaShape_InertiaTensor_0_1,Hoechst_Obj|AreaShape_Zernike_4_4,Hoechst_Obj|AreaShape_Zernike_4_0,Hoechst_Obj|AreaShape_Zernike_4_2,Hoechst_Obj|AreaShape_Zernike_3_3,Hoechst_Obj|AreaShape_Zernike_3_1,Hoechst_Obj|AreaShape_Zernike_1_1,Hoechst_Obj|AreaShape_Zernike_9_3,Hoechst_Obj|AreaShape_Zernike_9_7,Hoechst_Obj|AreaShape_Zernike_9_1,Hoechst_Obj|AreaShape_Zernike_9_9,Hoechst_Obj|AreaShape_Zernike_9_5,Hoechst_Obj|AreaShape_Zernike_8_2,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:200519_
    Overwrite existing files without warning?:No
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